<CompuCell3D Revision="20141124" Version="3.7.3">
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="500" y="500" z="1"/>
      <Steps>8000</Steps>
      <Temperature>5.0</Temperature>
      <NeighborOrder>2</NeighborOrder>
      <RandomSeed>1232232</RandomSeed>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="Normal"/>
      <CellType TypeId="2" TypeName="Cancer1"/>
      <CellType TypeId="3" TypeName="Cancer2"/>
      <CellType TypeId="4" TypeName="Dead"/>
   </Plugin>
   
   <Plugin Name="Volume"/>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
 <Plugin Name="NeighborTracker"/>



   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10</Energy>
      <Energy Type1="Medium" Type2="Normal">10</Energy>
      <Energy Type1="Medium" Type2="Cancer1">10</Energy>
      <Energy Type1="Medium" Type2="Cancer2">10</Energy>
      <Energy Type1="Medium" Type2="Dead">10</Energy>

      <Energy Type1="Normal" Type2="Normal">10</Energy>
      <Energy Type1="Normal" Type2="Cancer1">11</Energy>
      <Energy Type1="Normal" Type2="Cancer2">11</Energy>
      <Energy Type1="Normal" Type2="Dead">12</Energy>

      <Energy Type1="Dead" Type2="Cancer1">11</Energy>
      <Energy Type1="Dead" Type2="Cancer2">11</Energy>
      <Energy Type1="Dead" Type2="Dead">10</Energy>

      <Energy Type1="Cancer1" Type2="Cancer1">10.0</Energy>
      <Energy Type1="Cancer1" Type2="Cancer2">10.0</Energy>
      <Energy Type1="Cancer2" Type2="Cancer2">10.0</Energy>
      <NeighborOrder>2</NeighborOrder>
   </Plugin>


   <Steppable Type="UniformInitializer">
      <Region>
      <BoxMin x="100" y="100" z="0"/>
      <BoxMax x="400" y="400" z="1"/>
      <Gap>0</Gap>
      <Width>5</Width>
      <Types>Normal</Types>
      </Region>
   </Steppable>

<!--   <Steppable Type="PIFInitializer">
    <PIFName>Simulation/twocell.piff</PIFName>
  </Steppable> -->

</CompuCell3D>
