<CompuCell3D Revision="20141124" Version="3.7.3">
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="1000" y="1000" z="1"/>
      <Steps>10000</Steps>
      <Temperature>5</Temperature>
      <NeighborOrder>2</NeighborOrder>
      <!-- <RandomSeed>1232232</RandomSeed> -->
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="Normal"/>
      <CellType TypeId="2" TypeName="Cancer1"/>
      <CellType TypeId="3" TypeName="Cancer2"/>
      <CellType TypeId="4" TypeName="Dead"/>
   </Plugin>
   
   <Plugin Name="Volume"/>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
 <Plugin Name="NeighborTracker"/>



   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10</Energy>
      <Energy Type1="Medium" Type2="Normal">10</Energy>
      <Energy Type1="Medium" Type2="Cancer1">10</Energy>
      <Energy Type1="Medium" Type2="Cancer2">10</Energy>
      <Energy Type1="Medium" Type2="Dead">10</Energy>

      <Energy Type1="Normal" Type2="Normal">10</Energy>
      <Energy Type1="Normal" Type2="Cancer1">10</Energy>
      <Energy Type1="Normal" Type2="Dead">10</Energy>
      <Energy Type1="Normal" Type2="Cancer2">10</Energy>

      <Energy Type1="Cancer1" Type2="Cancer1">8.0</Energy>
      <Energy Type1="Cancer1" Type2="Dead">10.0</Energy>
      <Energy Type1="Cancer1" Type2="Cancer2">8.0</Energy>

      <Energy Type1="Cancer2" Type2="Cancer2">8.0</Energy>
      <Energy Type1="Cancer2" Type2="Dead">10.0</Energy>

      <Energy Type1="Dead" Type2="Dead">10.0</Energy>

      <NeighborOrder>2</NeighborOrder>
   </Plugin>

 
<!-- <Steppable Type="BlobInitializer">   
   <Region>
      <Center x="250" y="250" z="0"/>
      <Radius>170</Radius>
      <Gap>0</Gap>
      <Width>5</Width>
      <Types>Normal</Types>
   </Region>
</Steppable>

 -->

<!-- <Steppable Type="PIFDumper" Frequency="9999">
   <PIFName>LIMBO_TEMPLATE</PIFName>
</Steppable> -->

<Steppable Type="PIFInitializer">
   <!-- <PIFName>/home/zahmed/summer15/LIMBO_TEMPLATE/PIF_TEMPLATE.pif</PIFName> -->
   <PIFName>../LIMBO_TEMPLATE/PIF_TEMPLATE.pif</PIFName>
</Steppable>


<!-- <Steppable Type="UniformInitializer">   
   <Region>
      <BoxMin x="500" y="500" z="0"/>
      <BoxMax x="506" y="506" z="1"/>
      <Gap>0</Gap>
      <Width>6</Width>
      <Types>Normal</Types>
   </Region>
</Steppable> -->

</CompuCell3D>
