<CompuCell3D Revision="20141124" Version="3.7.3">
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="100" y="100" z="1"/>
      <Steps>10000</Steps>
      <Temperature>5.0</Temperature>
      <NeighborOrder>2</NeighborOrder>
      <RandomSeed>1232232</RandomSeed>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="Normal"/>
      <CellType TypeId="2" TypeName="Cancer1"/>
      <CellType TypeId="3" TypeName="Cancer2"/>
   </Plugin>
   
   <Plugin Name="Volume"/>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
 <Plugin Name="NeighborTracker"/>



   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10</Energy>
      <Energy Type1="Medium" Type2="Normal">10</Energy>
      <Energy Type1="Medium" Type2="Cancer1">10</Energy>
      <Energy Type1="Medium" Type2="Cancer2">10</Energy>

      <Energy Type1="Normal" Type2="Normal">10</Energy>
      <Energy Type1="Normal" Type2="Cancer1">10</Energy>
      <Energy Type1="Normal" Type2="Cancer2">10</Energy>

      <Energy Type1="Cancer1" Type2="Cancer1">10.0</Energy>
      <Energy Type1="Cancer1" Type2="Cancer2">10.0</Energy>
      <Energy Type1="Cancer2" Type2="Cancer2">10.0</Energy>
      <NeighborOrder>2</NeighborOrder>
   </Plugin>
   
   <!-- <Steppable Type="UniformInitializer"> -->
      
      <!-- Initial layout of cells in the form of rectangular slab -->
      <!-- <Region>
         <BoxMin x="90" y="90" z="0"/>
         <BoxMax x="110" y="110" z="1"/>
         <Gap>0</Gap>
         <Width>5</Width> -->
         <!-- Remove al cancer cells, we will only have one cancer cell that we have induced -->
         <!-- using the python code.
         <Types>Normal</Types>
      </Region>
   </Steppable> -->

   <Steppable Type="BlobInitializer">   
   <Region>
      <Center x="50" y="50" z="0"/>
      <Radius>25</Radius>
      <Gap>0</Gap>
      <Width>5</Width>
      <Types>Normal</Types>
   </Region>
</Steppable>

</CompuCell3D>
